CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<shape>.*)_(?P<number>.*)_(?P<staining>.*).jpg
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does staining "EdUcropped")
    Name to assign these images:EdU
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does staining "DAPIcropped")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
EnhanceOrSuppressFeatures:[module_num:5|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
    Select the input image:DAPI
    Name the output image:EnhanceOrSuppressFeaturesDAPI
    Select the operation:Enhance
    Feature size:42
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:6|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
    Select the input image:EdU
    Name the output image:EnhanceOrSuppressFeaturesEdU
    Select the operation:Enhance
    Feature size:40
    Feature type:Speckles
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    Speed and accuracy:Fast
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
CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:EnhanceOrSuppressFeaturesDAPI
    Name the output image:IllumDAPI
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Object size
    Approximate object diameter:200
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    Retain the averaged image?:No
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    Retain the dilated image?:Yes
    Name the dilated image:IllumDAPIDilated
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
CorrectIlluminationCalculate:[module_num:8|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
    Select the input image:EnhanceOrSuppressFeaturesEdU
    Name the output image:IllumEdU
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Object size
    Approximate object diameter:200
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    Retain the averaged image?:No
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    Retain the dilated image?:Yes
    Name the dilated image:IllumEdUDilated
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
CorrectIlluminationApply:[module_num:9|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
    Select the input image:EnhanceOrSuppressFeaturesDAPI
    Name the output image:CorrDAPI
    Select the illumination function:IllumDAPI
    Select how the illumination function is applied:Subtract
    Select the input image:EdU
    Name the output image:CorrEdU
    Select the illumination function:IllumEdU
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:CorrDAPI
    Name the primary objects to be identified:AllCells
    Typical diameter of objects, in pixel units (Min,Max):10,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.4
    Lower and upper bounds on threshold:0.01,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:CorrEdU
    Name the primary objects to be identified:EdUCells
    Typical diameter of objects, in pixel units (Min,Max):10,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.4
    Lower and upper bounds on threshold:0.01,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
OverlayOutlines:[module_num:12|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DAPI
    Name the output image:Overlay_EdU
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:cyan
    Select objects to display:AllCells
    Select outline color:red
    Select objects to display:EdUCells

CalculateMath:[module_num:13|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
    Name the output measurement:PercentEdUPositive
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Count_EdUCells
    Multiply the above operand by:1
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:Count_AllCells
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:Overlay_EdU
    Select method for constructing file names:From image filename
    Select image name for file prefix:EdU
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|OneDrive - TU Eindhoven\\Documents\\Studie\\Master\\Jaar 3\\Afstuderen\\CellProfiler\\2D chip\\Output_EdU_Pipeline
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:15|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Input Folder sub-folder|OneDrive - TU Eindhoven\\Documents\\Studie\\Master\\Jaar 3\\Afstuderen\\CellProfiler\\2D chip\\Output_EdU_Pipeline
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|URL_DAPI,Image|URL_EdU,Image|Threshold_WeightedVariance_AllCells,Image|Threshold_WeightedVariance_EdUCells,Image|Threshold_SumOfEntropies_EdUCells,Image|Threshold_SumOfEntropies_AllCells,Image|Threshold_OrigThreshold_EdUCells,Image|Threshold_OrigThreshold_AllCells,Image|Threshold_FinalThreshold_EdUCells,Image|Threshold_FinalThreshold_AllCells,Image|ExecutionTime_04Groups,Image|ExecutionTime_14SaveImages,Image|ExecutionTime_02Metadata,Image|ExecutionTime_01Images,Image|ExecutionTime_06EnhanceOrSuppressFeatures,Image|ExecutionTime_11IdentifyPrimaryObjects,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:EdU
    Overwrite existing files without warning?:No
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